CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Downloads
    Name of the file:image_list-7.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:DNA
    Name the output image:CorrDAPI
    Select the illumination function:DAPI_Illum
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:3|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
    Select the input image:GFP
    Name the output image:CorrGFP
    Select the illumination function:GFP_Illum
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:4|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notes:['Identify the nuclei from the DNA image. Some manual adjustment of the threshold correction factor and  smoothing filter size is required to optimize segmentation.']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
    Select the input image:CorrDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.04,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:5|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:CorrGFP
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.1
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.01,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifyTertiaryObjects:[module_num:6|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects found using the Progagtion method.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureTexture:[module_num:7|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
    Hidden:2
    Hidden:3
    Hidden:1
    Select an image to measure:CorrDAPI
    Select an image to measure:CorrGFP
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells
    Texture scale to measure:3
    Measure images or objects?:Both

MeasureGranularity:[module_num:8|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
    Image count:2
    Object count:0
    Select an image to measure:CorrDAPI
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Object count:0
    Select an image to measure:CorrGFP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the corrected DNA and GFP images.']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
    Hidden:1
    Select an image to measure:CorrDAPI
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:CorrGFP
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:11|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:13|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
    Hidden:2
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select an image to measure:CorrDAPI
    Select an image to measure:CorrGFP
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureColocalization:[module_num:14|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
    Hidden:2
    Hidden:1
    Select an image to measure:CorrDAPI
    Select an image to measure:CorrGFP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BBBC013_
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:Cytoplasm
    Name the output image:GFP_
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:Nuclei
    Name the output image:DNA_
    Select the color format:Grayscale
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:DNA_
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:DNA_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:GFP_
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GFP_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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